[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "Import movies",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/data/staging/sll/sll00001",
        "filesPattern": "k2_frames/Images-Disc*/GridSquare_*/Data/FoilHole_*.mrc",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": null,
        "samplingRateMode": 0,
        "samplingRate": null,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": null,
        "darkFile": null,
        "dataStreaming": true,
        "timeout": 72000,
        "fileTimeout": 30,
        "inputIndividualFrames": true,
        "numberOfIndividualFrames": null,
        "stackFrames": true,
        "writeMoviesInProject": true,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false,
        "streamingSocket": false,
        "socketPort": 5000
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "56",
        "object.label": "Motioncorr",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "gpuMsg": "True",
        "GPUIDs": "0",
        "alignFrame0": 1,
        "alignFrameN": 0,
        "useAlignToSum": true,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": true,
        "computeAllFramesAvg": true,
        "extraParams": "",
        "useMotioncor2": true,
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "group": 1,
        "tol": 0.5,
        "doMagCor": false,
        "useEst": true,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "defectFile": null,
        "extraParams2": "",
        "doSaveUnweightedMic": true,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "ProtCTFFind",
        "object.id": "118",
        "object.label": "Ctffind",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "useCtffind4": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 3.15,
        "stepPhaseShift": 0.2,
        "resamplePix": true,
        "lowRes": 0.03,
        "highRes": 0.42,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 256,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMicrographs": "56.outputMicrographs"
    },
    {
        "object.className": "ProtGctf",
        "object.id": "164",
        "object.label": "Gctf",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "lowRes": 0.03,
        "highRes": 0.42,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "astigmatism": 100.0,
        "windowSize": 512,
        "plotResRing": true,
        "GPUCore": 0,
        "doEPA": true,
        "EPAsmp": 4,
        "doBasicRotave": false,
        "bfactor": 150,
        "overlap": 0.5,
        "convsize": 85,
        "doHighRes": true,
        "HighResL": 15.0,
        "HighResH": 4.0,
        "HighResBf": 50,
        "doValidate": false,
        "doPhShEst": false,
        "phaseShiftL": 0.0,
        "phaseShiftH": 180.0,
        "phaseShiftS": 10.0,
        "phaseShiftT": 0,
        "inputMicrographs": "56.outputMicrographs"
    },
    {
        "object.className": "ProtMonitorSummary",
        "object.id": "222",
        "object.label": "Summary Monitor",
        "object.comment": "",
        "runName": null,
        "runMode": 0,
        "inputProtocols": [
            "2",
            "56",
            "118",
            "164"
        ],
        "samplingInterval": 60,
        "stddevValue": 0.04,
        "ratio1Value": 1.15,
        "ratio2Value": 4.5,
        "maxDefocus": 40000.0,
        "minDefocus": 1000.0,
        "astigmatism": 0.2,
        "monitorTime": 30000.0,
        "cpuAlert": 101.0,
        "memAlert": 101.0,
        "swapAlert": 101.0,
        "doGpu": false,
        "gpusToUse": "0",
        "doNetwork": false,
        "netInterfaces": 1,
        "doDiskIO": false,
        "doMail": false,
        "emailFrom": "",
        "emailTo": "",
        "smtp": "",
        "publishCmd": ""
    }
]