[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "pwem - import movies",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/data/staging/KEY/CODE/f3_frames/",
        "filesPattern": "Images-Disc1/GridSquare_*/Data/*_Fractions.mrc",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 1.0,
        "scannedPixelSize": 14.0,
        "doseInitial": 0.0,
        "dosePerFrame": 0.0,
        "gainFile": null,
        "darkFile": null,
        "dataStreaming": true,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "ProtRelionCompressMovies",
        "object.id": "3",
        "object.label": "relion - compress movies",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "compression": 2,
        "deflateLevel": 9,
        "hostName": "localhost",
        "numberOfThreads": 6,
        "numberOfMpi": 1,
        "inputMovies": "2.outputMovies"
    },
    {
        "object.className": "ProtRelionMotioncor",
        "object.id": "4",
        "object.label": "relion - motion correction",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "doDW": true,
        "saveNonDW": false,
        "savePSsum": true,
        "dosePSsum": 4.0,
        "extraParams": "",
        "doComputePSD": false,
        "doComputeMicThumbnail": true,
        "bfactor": 150,
        "patchX": 3,
        "patchY": 3,
        "groupFrames": 1,
        "binFactor": 1.0,
        "gainRot": 0,
        "gainFlip": 0,
        "defectFile": null,
        "hostName": "localhost",
        "numberOfThreads": 10,
        "numberOfMpi": 1,
        "inputMovies": "3.outputMovies"
    },
    {
        "object.className": "CistemProtCTFFind",
        "object.id": "5",
        "object.label": "cistem - ctffind4",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "inputType": 1,
        "avgFrames": 3,
        "usePowerSpectra": true,
        "windowSize": 512,
        "lowRes": 50.0,
        "highRes": 5.0,
        "minDefocus": 2000.0,
        "maxDefocus": 40000.0,
        "stepDefocus": 500.0,
        "slowSearch": false,
        "fixAstig": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 180.0,
        "stepPhaseShift": 10.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "4.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "11",
        "object.label": "Motioncorr",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "gpuList": "1",
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": true,
        "extraProtocolParams": "--use_worker_thread",
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "patchOverlap": 0,
        "group": 1,
        "tol": 0.5,
        "doSaveUnweightedMic": true,
        "extraParams2": "",
        "gainRot": 0,
        "gainFlip": 0,
        "defectFile": null,
        "defectMap": null,
        "doMagCor": false,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMovies": "3.outputMovies"
    },
    {
        "object.className": "ProtGctf",
        "object.id": "12",
        "object.label": "Gctf",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 1.0,
        "windowSize": 1024,
        "lowRes": 0.03,
        "highRes": 0.42,
        "minDefocus": 0.25,
        "maxDefocus": 9.0,
        "stepDefocus": 500.0,
        "astigmatism": 100.0,
        "plotResRing": true,
        "gpuList": "1",
        "doEPA": false,
        "EPAsmp": 4,
        "doBasicRotave": false,
        "overlap": 0.5,
        "convsize": 85,
        "bfactor": 150,
        "doHighRes": true,
        "HighResL": 15.0,
        "HighResH": 4.0,
        "HighResBf": 50,
        "doValidate": false,
        "doPhShEst": false,
        "phaseShiftL": 0.0,
        "phaseShiftH": 180.0,
        "phaseShiftS": 10.0,
        "phaseShiftT": 0,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "4.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "XmippProtParticlePicking",
        "object.id": "6",
        "object.label": "xmipp3 - manual-picking (step 1)",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "saveDiscarded": false,
        "doInteractive": true,
        "inputMicrographs": "4.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "SphireProtCRYOLOPicking",
        "object.id": "7",
        "object.label": "sphire - cryolo picking",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputModelFrom": 0,
        "conservPickVar": 0.1,
        "lowPassFilter": false,
        "absCutOffFreq": 0.1,
        "numCpus": 4,
        "input_size": 1024,
        "boxSize": 200,
        "max_box_per_image": 400,
        "useGpu": true,
        "gpuList": "0",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 64,
        "inputMicrographs": "4.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "ProtRelionExtractParticles",
        "object.id": "8",
        "object.label": "relion - particles extraction",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "boxSize": 256,
        "doRescale": true,
        "rescaledSize": 128,
        "doInvert": true,
        "doNormalize": true,
        "backDiameter": 140,
        "stddevWhiteDust": -1.0,
        "stddevBlackDust": -1.0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "ctfRelations": "5.outputCTF",
        "inputCoordinates": "7.outputCoordinates"
    },
    {
        "object.className": "ProtRelionClassify2D",
        "object.id": "9",
        "object.label": "relion - 2D classification",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 1,
        "isClassify": true,
        "is2D": true,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": 150,
        "maskZero": 0,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 50,
        "regularisationParamT": 2,
        "numberOfIterations": 25,
        "useFastSubsets": false,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "inplaneAngularSamplingDeg": 5.0,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "allowCoarserSampling": false,
        "useParallelDisk": true,
        "pooledParticles": 16,
        "allParticlesRam": false,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "0:1",
        "oversampling": 1,
        "extraParams": "",
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 3,
        "inputParticles": "8.outputParticles"
    },
    {
        "object.className": "ProtMonitor2dStreamer",
        "object.id": "10",
        "object.label": "emfacilities - 2d streamer",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "batchSize": 100000,
        "startingNumber": 0,
        "samplingInterval": 10,
        "inputParticles": "8.outputParticles",
        "input2dProtocol": "9."
    }
]
